PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = ratings
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Please look at the following images
        and rate them according to
        how you feel about them.

        [Click anywhere to continue...]
    MouseComponent intro_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet


        # Setup the LSL stream
        info = StreamInfo(name='PsychoPy', type='Markers', channel_count=1,
                          channel_format='string', source_id='PsychopyMarkersID321654')

        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample(["intro"])
  Routine pre
    TextComponent pre_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Get ready...
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  Routine fix
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine image
    ImageComponent stim_image
      image [set every repeat] = $f"./img/{img_name}"
      pos = (0, .2)
      size = (1, 1.3)
      startVal [time (s)] = 0.0
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    ImageComponent sam_image
      image = img/SAM-V-9.png
      pos = (0, -0.7)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent valence_slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.9)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      styles = ['slider', 'rating', 'triangleMarker']
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        outlet.push_sample([img_name])
  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        """
        Thanks for your participation!
        """
Flow
  Routine intro
  Routine pre
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lists\img.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'img_name': 'neutral_047.jpg', 'v_m': 5.88, 'v_std': 0.83, 'animal': 'cat'},
      {'img_name': 'neutral_093.jpg', 'v_m': 5.75, 'v_std': 0.89, 'animal': 'dog'},
      {'img_name': 'neutral_094.jpg', 'v_m': 5.63, 'v_std': 1.3, 'animal': 'cat'},
      {'img_name': 'neutral_095.jpg', 'v_m': 6.13, 'v_std': 1.46, 'animal': 'dog'},
      {'img_name': 'neutral_135.jpg', 'v_m': 6, 'v_std': 0.93, 'animal': 'cat'},
      {'img_name': 'neutral_136.jpg', 'v_m': 5.88, 'v_std': 2.1, 'animal': 'dog'},
      {'img_name': 'neutral_185.jpg', 'v_m': 6.25, 'v_std': 1.58, 'animal': 'cat'},
      {'img_name': 'neutral_186.jpg', 'v_m': 5.75, 'v_std': 1.16, 'animal': 'cat'},
      {'img_name': 'neutral_229.jpg', 'v_m': 7.5, 'v_std': 1.51, 'animal': 'dog'},
      {'img_name': 'neutral_230.jpg', 'v_m': 5.88, 'v_std': 1.13, 'animal': 'dog'},
      {'img_name': 'neutral_231.jpg', 'v_m': 5.63, 'v_std': 1.3, 'animal': 'dog'},
      {'img_name': 'neutral_272.jpg', 'v_m': 5.38, 'v_std': 1.19, 'animal': 'cat'},
      {'img_name': 'neutral_273.jpg', 'v_m': 6.13, 'v_std': 1.64, 'animal': 'dog'},
      {'img_name': 'neutral_329.jpg', 'v_m': 6.38, 'v_std': 1.51, 'animal': 'cat'},
      {'img_name': 'neutral_503.jpg', 'v_m': 6.63, 'v_std': 1.3, 'animal': 'dog'},
      {'img_name': 'neutral_506.jpg', 'v_m': 6.25, 'v_std': 0.71, 'animal': 'dog'},
      {'img_name': 'neutral_507.jpg', 'v_m': 6.75, 'v_std': 0.71, 'animal': 'cat'},
      {'img_name': 'neutral_545.jpg', 'v_m': 6.63, 'v_std': 1.41, 'animal': 'cat'},
      {'img_name': 'neutral_589.jpg', 'v_m': 7.13, 'v_std': 1.46, 'animal': 'cat'}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
    Routine fix
    Routine blank
    Routine image
  LoopTerminator trials
  Routine end
